<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cancer"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
      
      <!-- Module tracking pixels of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="cancer">10.0</Energy>
      <Energy Type1="cancer" Type2="cancer">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   

</CompuCell3D>
